WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice(Description="The display the dome projector is on (BonVision CreateWindow); a launch property."))
-> GroupWorkflow RigSetup
  Description: Reads this machine's rig.yml (ReadRigConfig), takes each device by name (RigDevice), opens the Harp boards, stepper drivers, Lickety Splits and cameras, zeroes the spouts, loads the visual and auditory resources and the reward lines. Everything here runs at Start, before Go.
  Workflow
    GroupWorkflow ReadRigConfig
      Description: Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.
      Workflow
        OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
        -> AsyncSubject RigConfigDirectory
        -> IncludeWorkflow(Path=OpenRigs.Core:ReadRigConfig.bonsai, FileName=rig.yml)
        -> WorkflowOutput
    -> UclOpenAvDome.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDome.UclOpenAvDomeRig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=BehaviorBoard)
    -> UclOpenAvDome.RigDevice(Name=BehaviorBoard-Main)
    -> AsyncSubject BehaviorBoard-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=TimestampGeneratorGen3)
    -> UclOpenAvDome.RigDevice(Name=TimestampGeneratorGen3-Main)
    -> AsyncSubject TimestampGeneratorGen3-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=StepperDriver)
    -> UclOpenAvDome.RigDevice(Name=StepperDriver-A)
    -> AsyncSubject StepperDriver-A

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenAvDome.RigDevice(Name=LicketySplit-Left)
    -> AsyncSubject LicketySplit-Left

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenAvDome.RigDevice(Name=LicketySplit-Right)
    -> AsyncSubject LicketySplit-Right

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Face)
    -> AsyncSubject Camera-Face

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Pupil)
    -> AsyncSubject Camera-Pupil

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Body)
    -> AsyncSubject Camera-Body

    GroupWorkflow HardwareDevices
      Description: The Harp devices from rig.yml: timestamp generator (the clock), Behavior board (valves, camera trigger, wheel), the two stepper drivers of the spout stage, and both Lickety Splits; each behind its <Name>.Data and <Name>.Commands subjects.
      Workflow
        SubscribeSubject TimestampGeneratorGen3-Main
        -> PropertyMapping(PortName(Selector=Settings.PortName), TimerFrequency(Selector=Settings.TimerFrequency))
        -> IncludeWorkflow
          Path=OpenRigs.Devices:TimestampGeneratorGen3.bonsai
          CommandsSubjectName=TimestampGeneratorCommands
          PortName=COM16
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=ClockSynchronizerEvents
          TimerFrequency=Timer1000Hz

        SubscribeSubject ClockSynchronizerEvents
        -> PublishSubject TimestampGeneratorGen3-Main.Data

        BehaviorSubject<Bonsai.Harp.HarpMessage> TimestampGeneratorGen3-Main.Commands

        SubscribeSubject TimestampGeneratorGen3-Main.Commands
        -> MulticastSubject TimestampGeneratorCommands

        SubscribeSubject BehaviorBoard-Main
        -> PropertyMapping => #9
          PortName(Selector=Settings.PortName)
          CountsPerRev(Selector=Settings.RunningWheel.CountsPerRev)
          WheelDiameterMm(Selector=Settings.RunningWheel.WheelDiameterMm)
          EnableTrigger0(Selector=Settings.CameraTriggerController.Trigger0Enabled)
          EnableTrigger1(Selector=Settings.CameraTriggerController.Trigger1Enabled)
          Trigger0Frequency(Selector=Settings.CameraTriggerController.Trigger0Frequency)
          Trigger1Frequency(Selector=Settings.CameraTriggerController.Trigger1Frequency)
          OutputPulseEnable(Selector=Settings.PulseController.OutputPulseEnable)
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO3)
        -> UclOpenAvDome.MatchPulseOutput(Type=TypeMapping<UclOpenAvDome.FixedPulse>)
        -> PropertyMapping(PulseDO3(Selector=PulseWidthMs)) => #18
        #9, #18 -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorBoard-Main.Commands
              PortName=COM11
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorBoard-Main.Data

            ExternalizedMapping(CountsPerRev, WheelDiameterMm)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.RunningWheel.bonsai
              CommandsSubjectName=BehaviorBoard-Main.Commands
              EventsSubjectName=BehaviorBoard-Main.Data
              CountsPerRev=4096
              WheelDiameterMm=170
              WheelDistanceSubjectName=WheelDistanceCm

            ExternalizedMapping(PulseDO1, PulseDO2, PulseDO3, OutputPulseEnable)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=40
              PulseDO2=50
              PulseDO3=3000
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              TriggerPulseSubjectName=TriggerPulse
              TriggerCalibratedPulseSubjectName=TriggerCalibratedPulse

            BehaviorSubject<System.Tuple(System.Int32,System.Double)> DeliverRewardCommand
            -> IncludeWorkflow(Path=Extensions\DeliverReward.bonsai)

            ExternalizedMapping(EnableTrigger0, EnableTrigger1, Trigger0Frequency, Trigger1Frequency)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.CameraTriggerController.bonsai
              EnableTrigger0=true
              EnableTrigger1=false
              Trigger0Frequency=50
              Trigger1Frequency=50
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              Camera0TriggerEventsSubjectName=Camera0TriggerEvents
              Camera1TriggerEventsSubjectName=Camera1TriggerEvents

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT2S)
            -> MulticastSubject StartCameras

        GroupWorkflow LicketySplits
            SubscribeSubject LicketySplit-Right
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Right.Commands
              PortName=COM13
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Right.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateRight

            SubscribeSubject LicketySplit-Left
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Left.Commands
              PortName=COM15
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Left.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateLeft

        GroupWorkflow Cameras
            SubscribeSubject Camera-Face
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=ExposureTime)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              PixelFormat(Selector=PixelFormat)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366326
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Face.Data

            SubscribeSubject Camera-Body
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=ExposureTime)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              PixelFormat(Selector=PixelFormat)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366318
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Body.Data

            SubscribeSubject Camera-Pupil
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=ExposureTime)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              PixelFormat(Selector=PixelFormat)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366328
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Pupil.Data

        GroupWorkflow StepperDriver
            SubscribeSubject StepperDriver-A
            -> PropertyMapping(StepperDriver1PortName(Selector=Settings.PortName)) => #1
            SubscribeSubject StepperDriver-B
            -> PropertyMapping(StepperDriver2PortName(Selector=Settings.PortName)) => #13
            #1, #13 -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
              Description: Typed subjects the trial loop writes and reads: trial count, zeroing state, the decision variable and visual azimuth, and the Zapit command and reply streams.
              Workflow
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_LeftIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_RightIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPositionCommand

                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                IntProperty(Value=0) => #7
                IntProperty(Value=0) => #8
                IntProperty(Value=0) => #9
                #5, #6, #7, #8, #9 -> Zip
                -> BehaviorSubject StepperPosition_HOME

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> SelectMany "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #19
                    Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #21
                    Disable PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #23
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #19, #21, #23 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> SelectMany "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #16
                    Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #18
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #16, #18 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip => #5
                -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2) => #6
                -> BooleanProperty(Value=true)
                -> MulticastSubject SteppersZEROed
                -> SelectMany SendSpoutInCommand
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                -> WorkflowOutput
                #0 -> StringProperty(Value=Motor0) => #11
                #1 -> StringProperty(Value=Motor1) => #12
                #2 -> StringProperty(Value=Motor2) => #13
                #3 -> StringProperty(Value=Motor3) => #14
                #4 -> StringProperty(Value=Motor4) => #15
                #5 -> StringProperty(Value=AllZeroed) => #16
                #6 -> StringProperty(Value=HarpDelay) => #17
                SubscribeSubject StepperDriversInitialized
                -> Take(Count=1)
                -> StringProperty(Value=StepperDriversInitialized) => #20
                SubscribeSubject Timestamp
                -> Take(Count=1)
                -> StringProperty(Value=Timestamp) => #23
                #20, #23, #11, #12, #13, #14, #15, #16, #17 -> Merge
                -> StartupWatchdog
                  Expected="StepperDriversInitialized, Timestamp, Motor0, Motor1, Motor2, Motor3, Motor4, AllZeroed, HarpDelay"
                  TimeoutSeconds=60
                  What="Zeroing the spout steppers (needed for Ready)"

            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai) => #8
            SubscribeSubject SteppersZEROed
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #10 -> SubscribeWhen

            SubscribeSubject StepperDriver1Events
            -> PublishSubject StepperDriver-A.Data

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver-A.Commands

            SubscribeSubject StepperDriver-A.Commands
            -> MulticastSubject StepperDriver1Commands

            SubscribeSubject StepperDriver2Events
            -> PublishSubject StepperDriver-B.Data

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver-B.Commands

            SubscribeSubject StepperDriver-B.Commands
            -> MulticastSubject StepperDriver2Commands

        GroupWorkflow Zapit
          Description: Connects to the Zapit optogenetics server only when the task YAML enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies. The experiment stops at startup if Zapit's loaded file has a different number of conditions from the task's Zapit file (CheckZapitConditionCount), since Zapit presents whatever it has at each condition number; on any error reply from Zapit; and when a mouse other than test runs optogenetics on a rig without hardware triggering (Pip, 10 Nov 2026, as the corridor's).
          Workflow
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Optogenetics.UseZapit)
            -> Take(Count=1)
            -> Condition OptogeneticsEnabled?
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany ConnectZapit
                WorkflowInput Source1

                SubscribeSubject RigConfigs
                -> PropertyMapping(Host(Selector=Zapit.Host), Port(Selector=Zapit.Port))
                -> IncludeWorkflow(Path=Extensions\Zapit.bonsai, Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
                -> WorkflowOutput

                SubscribeSubject ZapitReplies
                -> Condition ConditionCountReply?(Description="Zapit's answer to the startup GetNumConditions query (Zapit.bonsai sends it on connecting).")
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: CommandCode == 4
                    -> WorkflowOutput
                -> Take(Count=1) => #7
                SubscribeSubject TaskConfig => #8
                #7, #8 -> Zip
                -> CheckZapitConditionCount

                SubscribeSubject ZapitReplies
                -> Condition ZapitError?
                  Description: Any error reply from Zapit stops the experiment, as the corridor's does (Pip, 10 Nov 2026): a refused StartStimulus or a failed query. Carrying on would log trials as stimulated that were not.
                  Workflow
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: IsError
                    -> WorkflowOutput
                -> Format
                  Format: Zapit answered {0} with an error (reply value {1}, laserOn {2}). Check the MATLAB window: is the conditions file the task file names (zapitConfigPath) loaded in Zapit, is Zapit calibrated, and is the DAQ working?
                  Selector="Command,Value,LaserOn"
                -> ThrowError

                SubscribeSubject RigConfigs => #15
                SubscribeSubject SubjectId => #16
                #15, #16 -> Zip
                -> Condition SoftwareTriggeredRealMouse?
                  Description: A rig without hardware triggering (rig.yml zapit.hardwareTriggered false) starts the laser when the command reaches Zapit, with no onset in the Harp log. It is only for test mice, as in the corridor (Pip, 10 Nov 2026): an optogenetics experiment with any other mouse stops here.
                  Workflow
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: !Item1.Zapit.HardwareTriggered && !Item2.ToLowerInvariant().StartsWith("test")
                    -> WorkflowOutput
                -> Format
                  Format: Optogenetics with a real mouse ({0}) needs a hardware-triggered rig, and this rig's rig.yml has zapit.hardwareTriggered false. Cable the trigger line to the Zapit DAQ trigger input and set hardwareTriggered: true in rig.yml. Rigs without hardware triggering are for test mice only.
                  Selector=Item2
                -> ThrowError

    SubscribeSubject RigConfigs
    -> PropertyMapping(FileName(Selector=ProjectionCalibration.MeshMapPath), GammaLut(Selector=ProjectionCalibration.GammaLutPath)) => #38
    ExternalizedMapping(DisplayDevice) => #39
    #38, #39 -> GroupWorkflow BonvisionResources
      Description: BonVision's window, mesh mapping and gamma correction for the dome projector, from projectionCalibration in rig.yml; DisplayDevice is a launch property.
      Workflow
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv) => #8
        ExternalizedMapping(GammaLut) => #9
        #8, #9 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)
    -> DisposeOnRenderThread(TimeoutSeconds=2)

    GroupWorkflow Audio
      Description: The speaker mixer (speakerArray.device in rig.yml), the auditory stimulus set and speaker filters from the rig's calibration folder, the error sound and the background noise, and PlayStim, which plays each trial's stimulus on its speaker with a copy on the sync channel.
      Workflow
        GroupWorkflow LoadAudioFiles
            SubscribeSubject RigConfigs
            -> MemberSelector(Selector=SpeakerArray) => #1
            SubscribeSubject RigConfigDirectory => #2
            #1, #2 -> Zip
            -> LoadAuditoryStimulusSet(Folder=calibration\AuditoryStimuli, FilePrefix=filtered_pink_pulse_train_)
            -> Take(Count=1)
            -> AsyncSubject AuditoryStimulusSet

            SubscribeSubject AuditoryStimulusSet
            -> MemberSelector(Selector=WaveformLength)
            -> PropertyMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=72000, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)
            -> Take(Count=1)
            -> AsyncSubject PinkNoiseSync

            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Path)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformErrorSound

            Bonsai.Audio.AudioReader(FileName=LocalFiles\background_white_noise.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.05, Shift=0)
            -> AsyncSubject waveformBackground

        ExternalizedMapping(X-Speaker1, Y-Speaker1, Z-Speaker1, X-Speaker2, Y-Speaker2, Z-Speaker2, X-Speaker3, Y-Speaker3, Z-Speaker3)
        -> GroupWorkflow SpeakerLocations
            ExternalizedMapping(X(DisplayName=X-Speaker1), Y(DisplayName=Y-Speaker1), Z(DisplayName=Z-Speaker1))
            -> Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #2
            ExternalizedMapping(X(DisplayName=X-Speaker2), Y(DisplayName=Y-Speaker2), Z(DisplayName=Z-Speaker2))
            -> Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #5
            ExternalizedMapping(X(DisplayName=X-Speaker3), Y(DisplayName=Y-Speaker3), Z(DisplayName=Z-Speaker3))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #8
            #2, #5, #8 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        GroupWorkflow Mixer
            GroupWorkflow MixerDevice => #0
                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerStimSource

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerStimSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #7
                SubscribeSubject MixerStimSource => #8
                #7, #8 -> Bonsai.Mixer.AppendBuffer

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerErrorSoundSource

                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerErrorSoundSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBufferErrorSound => #14
                SubscribeSubject MixerErrorSoundSource => #15
                #14, #15 -> Bonsai.Mixer.AppendBuffer

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=true, Playing=true, Gain=1)
                -> MulticastSubject MixerBackgroundSoundSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBufferBackgroundSound => #20
                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerBackgroundSoundSource => #21
                #20, #21 -> Bonsai.Mixer.AppendBuffer

                SubscribeSubject RigConfigs
                -> PropertyMapping
                  HostApi(Selector=SpeakerArray.Device.HostApi)
                  DeviceName(Selector=SpeakerArray.Device.DeviceName)
                  SampleRate(Selector=SpeakerArray.Device.SampleRate)
                  SuggestedLatency(Selector=SpeakerArray.Device.SuggestedLatency)
                -> Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
                -> Bonsai.Mixer.StartMixer
                -> BehaviorSubject Mixer
            Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #1
            #0, #1 -> DelaySubscription(DueTime=PT3S)
            -> WorkflowOutput

        SubscribeSubject RigConfigs
        -> PropertyMapping(Value(Selector=SpeakerArray.Device.ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=0)
        -> BehaviorSubject ActiveSoundChannels

        BehaviorSubject<System.Boolean> StartAuditoryStimulus
        -> Condition AudioEnabled?
          Description: StartAuditoryStimulus carries the trial's audioEnabled: false (discrimination's visual-only and neutral trials) plays nothing, though the stimulus onset is still stamped.
          Workflow
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany PlayStim
            SubscribeSubject AuditoryStimulusSet => #0
            SubscribeSubject thisTrialData => #1
            SubscribeSubject ActiveSoundChannels => #2
            #0, #1, #2 -> Zip
            -> SelectAuditoryStimulus
            -> Take(Count=1) => #5
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #7
            #5, #7 -> Broadcast(ChannelCount=32) => #8
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #12
            #8, #12 -> ChannelActivation(Channels(int=2), Gain(double=1)) => #13
            SubscribeSubject PinkNoiseSync
            -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels(int=31), Gain(double=0.2)) => #16
            #13, #16 -> Zip
            -> Add
            -> MulticastSubject MixerBuffer

        BehaviorSubject<System.Boolean> StartAuditoryErrorSound
        -> Condition ErrorSoundEnabled?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany PlayErrorSound
            SubscribeSubject waveformErrorSound
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Channel)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Gain)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Gain) => #14
            SubscribeSubject AuditoryStimulusSet => #17
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Channel) => #19
            #17, #1, #19 -> Zip
            -> EqualiseForSpeaker => #21
            #21, #3 -> Broadcast(ChannelCount=32) => #4
            #4, #9, #14 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBufferErrorSound

        Defer PlayBackground
          Description: Background white noise for the whole workflow, looping from 2 s after start on every wired speaker in rig.yml (speakerArray.speakers), never on the sync or unused channels.
          Workflow
            SubscribeSubject waveformBackground
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject AuditoryStimulusSet
            -> MemberSelector(Selector=SpeakerChannels)
            -> PropertyMapping(Channels) => #7
            #4, #7 -> ChannelActivation(Channels(int=0), Gain(double=1))
            -> WorkflowOutput
        -> MulticastSubject MixerBufferBackgroundSound
        -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow RewardLines
      Description: Builds the left and right reward lines from the rig configuration: rewardValves says which behavior board line each side is, and that line's entry in the outputs is loaded. A calibrated line reads and fits its valve calibration from the rig configuration directory, a fixed line keeps its width. The Logging group snapshots each calibration read into the experiment folder.
      Workflow
        SubscribeSubject RigConfigs => #0
        SubscribeSubject RigConfigDirectory => #1
        #0, #1 -> Zip
        -> LoadSideRewardLine(Side=Left)
        -> Take(Count=1)
        -> AsyncSubject RewardLineLeft

        SubscribeSubject RigConfigs => #6
        SubscribeSubject RigConfigDirectory => #7
        #6, #7 -> Zip
        -> LoadSideRewardLine(Side=Right)
        -> Take(Count=1)
        -> AsyncSubject RewardLineRight

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=StepperDriver)
    -> UclOpenAvDome.RigDevice(Name=StepperDriver-B)
    -> AsyncSubject StepperDriver-B

GroupWorkflow Declarations
  Description: Experiment-wide subjects the other groups share: TrialCount (from 0), TrialRow (each trial's BonsaiData_Trial row, built in ExecuteTrial when the choice is made and replayed to the experiment logs), whether the steppers are zeroed, the decision variable, the visual azimuth (start and current), and the Zapit command and reply streams.
  Workflow
    IntProperty(Value=0)
    -> BehaviorSubject TrialCount

    BehaviorSubject<System.Boolean> SteppersZEROed
    BehaviorSubject<System.Int32> DecisionVariable
    BehaviorSubject<System.Double> visualAzimuthStart
    BehaviorSubject<System.Double> visualAzimuth
    BehaviorSubject<ZapitCommand> ZapitCommands
    BehaviorSubject<ZapitReply> ZapitReplies
    BehaviorSubject<Bonsai.Harp.Timestamped(TrialRow)> TrialRow

ExternalizedMapping
  SubjectId(Description="The mouse; the launch's own, from rig-control.")
  SessionId(Description="The session number; the launch's own, from rig-control.")
  TaskPath
    Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits (lib-open-rigs settings-files plan); from the editor, config\task-localization.yml."
-> GroupWorkflow Initialization
  Description: The experiment controller (OpenRigs.Control, ExperimentControl), in place of the Bonsai.Gui window: SubjectId (the mouse) and SessionId from this node's properties or the command line (--property:SubjectId=...), the settings a controller may change until Go (TrainingStage, ManualRewardUl, StepSize; the task's own settings are the task file's, which rig-control writes at Go and names in TaskPath) and the commands it may send while ready or recording, over TCP 5561 (the rig agent relays). The workflow starts into ready mode: devices connected, spouts zeroed and at this mouse's positions, live view streaming, nothing recorded, and reports Ready once the steppers are zeroed. Go publishes RunSettings (SubjectId, SessionId, TrainingStage), which logging and the trial loop wait for, sets StartExperiment true (the old Start button), and names the task file (TaskFilePath, from TaskPath). SubjectId is also published at Start, for this mouse's spout positions file. StepSize follows the controller live (StepperStepSize); RewardUl is what RewardLeft and RewardRight deliver: ManualRewardUl (3 ul unless set) until the first trial gives its size.
  Workflow
    ExternalizedMapping(Value(DisplayName=SubjectId, Description="The subject (mouse) ID."))
    -> StringProperty(Value="")
    -> Take(Count=1)
    -> AsyncSubject SubjectId

    ExternalizedMapping(SessionId) => #4
    SubscribeSubject SubjectId
    -> PropertyMapping(SubjectId) => #6
    #4, #6 -> IncludeWorkflow => #7
      Path=OpenRigs.Control:ExperimentControl.bonsai
      SubjectId=UNMAPPED
      SessionId=""
      ControlEndpoint=@tcp://127.0.0.1:5561
      Parameters
        Parameter
          Name=TrainingStage
          Value=4
          Description="Row of the task file's trainingStages to run, 0 to 5 (a row past the end uses the last): the GUI's Training Stage."
          Minimum=0
          Maximum=5
          WholeNumber=true
        Parameter
          Name=ManualRewardUl
          Value=3
          Description: Microlitres RewardLeft and RewardRight deliver before Go, taken live; after Go a manual reward is the current trial's size. The task's own reward sizes are the task file's (trainingStages rewardSizeUl).
          Minimum=0
        Parameter(Name=SpoutStepSize, Value=150, Description="Motor steps each spout nudge command moves, taken live while ready.", Minimum=1, WholeNumber=true)
      Commands
        Command(Name=RewardLeft, Description="Deliver one reward on the left spout (flush).")
        Command(Name=RewardRight, Description="Deliver one reward on the right spout (flush).")
        Command(Name=SpoutsHome, Description="Move both spouts to the home position.")
        Command(Name=SpoutsIn, Description="Move both spouts to the in position.")
        Command(Name=SpoutsOut, Description="Move both spouts to the out position.")
        Command(Name=SaveSpoutPositions, Description="Save the spouts' in positions to this mouse's file.")
        Command(Name=LeftUp, Description="Nudge the left spout up by SpoutStepSize.")
        Command(Name=LeftDown, Description="Nudge the left spout down by SpoutStepSize.")
        Command(Name=RightUp, Description="Nudge the right spout up by SpoutStepSize.")
        Command(Name=RightDown, Description="Nudge the right spout down by SpoutStepSize.")
        Command(Name=LeftFront, Description="Nudge the left spout forward by SpoutStepSize.")
        Command(Name=LeftBack, Description="Nudge the left spout back by SpoutStepSize.")
        Command(Name=RightFront, Description="Nudge the right spout forward by SpoutStepSize.")
        Command(Name=RightBack, Description="Nudge the right spout back by SpoutStepSize.")
        Command(Name=BaseLeft, Description="Nudge the spout base left by SpoutStepSize.")
        Command(Name=BaseRight, Description="Nudge the spout base right by SpoutStepSize.")
    SubscribeSubject SubjectId => #8
    #7, #8 -> SubscribeWhen

    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SubjectId) => #11
    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SessionId) => #13
    SubscribeSubject ExperimentGo
    -> OpenRigs.Control.ParameterValue(Name=TrainingStage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StageToInt => #16
      Expression: Convert.ToInt32(it)
    #11, #13, #16 -> Zip
    -> Take(Count=1)
    -> Condition RunSettingsValid(Description="Subject and session given; the stage's limits are the parameter's.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1.Trim().Length > 0 && Item2.Trim().Length > 0
        -> WorkflowOutput
    -> First
    -> AsyncSubject RunSettings

    SubscribeSubject RunSettings
    -> MemberSelector(Selector=Item3)
    -> AsyncSubject TrainingStage

    SubscribeSubject ExperimentGo => #25
    ExternalizedMapping => #50
      Value
        DisplayName=TaskPath
        Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits; from the editor, config\task-localization.yml."
    Source1=#25, Source1=#50 -> StringProperty(Value=..\config\task-localization.yml)
    -> Take(Count=1)
    -> AsyncSubject TaskFilePath

    BooleanProperty(Value=false)
    -> BehaviorSubject StartExperiment

    SubscribeSubject ExperimentGo
    -> BooleanProperty(Value=true)
    -> MulticastSubject StartExperiment

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=SpoutStepSize)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StepSizeToInt
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    DoubleProperty(Value=3)
    -> BehaviorSubject RewardUl

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=ManualRewardUl)
    -> Condition Given?(Description="A blank set keeps the size as it was.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Trim().Length > 0
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToDouble
      Expression: Convert.ToDouble(it)
    -> MulticastSubject RewardUl

    SubscribeSubject SteppersZEROed
    -> Take(Count=1)
    -> OpenRigs.Control.ReportPhase(Phase=Ready)

GroupWorkflow InitialiseTrials
  Description: At Go: reads the task file (TaskPath, as rig-control wrote it) and publishes TaskConfig. Declares thisTrialData, the current trial, which TrialLoop's DrawTrial fills.
  Workflow
    Annotation "Read task configuration"
      Text: At Go: the task file named by TaskPath is read, as rig-control wrote it at Go (the file chosen at launch, with the form's edits and any null rngSeed drawn, checked against the task schema; lib-open-rigs settings-files plan), then published as TaskConfig and written to the experiment as Settings\Settings_Task_<DateTime>.json. Nothing is read before Go. From the editor TaskPath is config\task-localization.yml, as it is.
    -> SubscribeSubject TaskFilePath
    -> UclOpenAvDome.ReadTextFile
    -> UclOpenAvDomeTask.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDomeTask.UclOpenAvDomeTaskLogic>)
    -> AsyncSubject TaskConfig

    BehaviorSubject<Trial> thisTrialData

GroupWorkflow Status
  Description: The current trial's facts, reported to the controller as metrics (ReportMetric; the latest value of each is in status), named as BonsaiData_Trial's columns: target, trialType, visualAzimuthDeg, audioAzimuthDeg (as drawn; the row has the speaker that played) and rewardSizeUl. Counts, water, licks and performance are not computed here: rig-control computes them from BonsaiData_Trial, BonsaiData_Async and the LicketySplit lick files (register 32). Also sets RewardUl, the size a manual reward uses.
  Workflow
    SubscribeSubject thisTrialData => #0
    -> MemberSelector(Selector=targetSide)
    -> OpenRigs.Control.ReportMetric(Name=target)
    #0 -> MemberSelector(Selector=trialTypeName)
    -> OpenRigs.Control.ReportMetric(Name=trialType)
    #0 -> MemberSelector(Selector=visualAzimuth)
    -> OpenRigs.Control.ReportMetric(Name=visualAzimuthDeg)
    #0 -> MemberSelector(Selector=audioAzimuth)
    -> OpenRigs.Control.ReportMetric(Name=audioAzimuthDeg)
    #0 -> MemberSelector(Selector=RewardSizeInUl)
    -> OpenRigs.Control.ReportMetric(Name=rewardSizeUl)
    #0 -> MemberSelector(Selector=RewardSizeInUl)
    -> MulticastSubject RewardUl

GroupWorkflow Commands
  Description: The controller's commands, while ready or recording: rewards (flushes) on either spout, the spouts home, in and out, nudging each spout and the base by SpoutStepSize, and saving this mouse's spout positions. The valve and stepper logic is the old GUI's; only its sources changed, from buttons to OnCommand.
  Workflow
    Annotation Commands
      Text: Each command the controller may send (declared on ExperimentControl) raises the subject the valve and stepper logic below already listens to. Spout nudges pair as the GUI's buttons did: Left/Right Up/Down are motors 4/5, Left/Right Front/Back motors 2/3, Base Left/Right motor 1.

    SubscribeSubject ControlEvents => #1
    -> OpenRigs.Control.OnCommand(Name=RewardLeft)
    -> PublishSubject RewardLeft
    #1 -> OpenRigs.Control.OnCommand(Name=RewardRight)
    -> PublishSubject RewardRight
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsHome)
    -> PublishSubject SpoutsHome
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsIn)
    -> PublishSubject SpoutsIn
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsOut)
    -> PublishSubject SpoutsOut
    #1 -> OpenRigs.Control.OnCommand(Name=SaveSpoutPositions)
    -> PublishSubject SaveSpoutPositions
    #1 -> OpenRigs.Control.OnCommand(Name=LeftUp)
    -> PublishSubject Motor4_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftDown)
    -> PublishSubject Motor4_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightUp)
    -> PublishSubject Motor5_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightDown)
    -> PublishSubject Motor5_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=LeftFront)
    -> PublishSubject Motor2_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftBack)
    -> PublishSubject Motor2_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightFront)
    -> PublishSubject Motor3_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightBack)
    -> PublishSubject Motor3_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=BaseLeft)
    -> PublishSubject Motor1_UP
    #1 -> OpenRigs.Control.OnCommand(Name=BaseRight)
    -> PublishSubject Motor1_DOWN

    Annotation "Spout positions file"
      Text: This mouse's spout positions: <RigConfigDirectory>\calibration\LickSpoutPositions\<SubjectId>.csv, read at Start (ReadPositions) and written by SaveSpoutPositions.

    SubscribeSubject RigConfigDirectory
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
      Expression: it + "\\calibration\\LickSpoutPositions\\"
    SubscribeSubject SubjectId => #37
    #36, #37 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 + it.Item2 + ".csv"
    -> BehaviorSubject SpoutPositionFileName

    GroupWorkflow ValveCommands(Description=ValveGUICallbacks)
        SubscribeSubject RewardLeft
        -> IntProperty(Value=1) => #1
        SubscribeSubject RewardRight
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject RewardUl => #5
        #4, #5 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand
        -> WorkflowOutput

    GroupWorkflow StepperCommands(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")
        -> GroupWorkflow "Position Update"(Description="Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn

            SubscribeSubject StepperPosition_BothIn => #14
            Annotation "Sends command with every update"(Text="Sends command with every update") => #15
            #14, #15 -> SelectMany "Send command when experiment not running" => #16
                WorkflowInput Source1 => #0
                SubscribeSubject StartExperiment => #1
                #0, #1 -> WithLatestFrom => #2
                -> Condition "Send Command?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject StepperPositionCommand => #5
                #2 -> Condition "Don't send?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #7
                #5, #7 -> Merge => #8
                #2, #8 -> Sample
                -> WorkflowOutput
            GroupWorkflow "Init Positions"(Description="Init Positions") => #17
                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=LickSpoutDefaultPosition) => #1
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #2
                #1, #2 -> MemberSelector(Selector=BaseTransverse)
                -> BehaviorSubject Motor1_Position => #4
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #5
                #1, #5 -> MemberSelector(Selector=LeftRadial)
                -> BehaviorSubject Motor2_Position => #7
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #8
                #1, #8 -> MemberSelector(Selector=RightRadial)
                -> BehaviorSubject Motor3_Position => #10
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #11
                #1, #11 -> MemberSelector(Selector=LeftElevation)
                -> BehaviorSubject Motor4_Position => #13
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #14
                #1, #14 -> MemberSelector(Selector=RightElevation)
                -> BehaviorSubject Motor5_Position => #16
                #4, #7, #10, #13, #16 -> Merge
                -> WorkflowOutput
            #16, #17 -> SubscribeWhen => #18
            SubscribeSubject SteppersZEROed => #19
            #18, #19 -> SubscribeWhen

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #22
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #25
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #28
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #31
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #34
            #22, #25, #28, #31, #34 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #38
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #40
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #43
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #45
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #48
            #38, #40, #43, #45, #48 -> CombineLatest
            -> MulticastSubject StepperPosition_LeftIN

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #52
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #55
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #57
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #60
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #62
            #52, #55, #57, #60, #62 -> CombineLatest
            -> MulticastSubject StepperPosition_RightIN

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")
        -> GroupWorkflow PositionButtonCallbacks(Description="PositionButtonCallbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject SpoutsHome => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsIn => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsOut => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")
        -> SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    SubscribeSubject SpoutPositionFileName
    -> PropertyMapping(FileName) => #44
    SubscribeSubject SaveSpoutPositions => #45
    SubscribeSubject SpoutPositionFileName => #46
    #45, #46 -> SubscribeWhen => #47
    #44, #47 -> SelectMany WritePositions
        WorkflowInput Source1

        SubscribeSubject Motor1_Position => #1
        SubscribeSubject Motor2_Position => #2
        SubscribeSubject Motor3_Position => #3
        SubscribeSubject Motor4_Position => #4
        SubscribeSubject Motor5_Position => #5
        #1, #2, #3, #4, #5 -> Zip
        -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #7
        ExternalizedMapping(FileName) => #8
        #7, #8 -> Bonsai.IO.CsvWriter(FileName=UNMAPPED, Delimiter=",", ListSeparator=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=it)
        -> Take(Count=1)
        -> WorkflowOutput

    SubscribeSubject SpoutPositionFileName
    -> SelectMany ReadPositions
        WorkflowInput Source1
        -> Take(Count=1) => #1
        SubscribeSubject Motor5_Position => #13
        #1, #13 -> SubscribeWhen
        -> AsyncSubject _fName

        SubscribeSubject _fName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject _fName
        -> FileExists => #6
        -> Condition True? => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #7 -> SelectMany LoadSpoutPositions
            WorkflowInput Source1

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=UNMAPPED, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #2
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Motor1_Position => #4
            #2 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Motor2_Position => #6
            #2 -> MemberSelector(Selector=Item3)
            -> MulticastSubject Motor3_Position => #8
            #2 -> MemberSelector(Selector=Item4)
            -> MulticastSubject Motor4_Position => #10
            #2 -> MemberSelector(Selector=Item5)
            -> MulticastSubject Motor5_Position => #12
            #4, #6, #8, #10, #12 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6 -> Condition False? => #10
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9, #10 -> Merge
        -> WorkflowOutput

GroupWorkflow Logging
  Description: Everything written to the experiment folder: LogControllerLogic makes the folder at Go and publishes PathPrefix; ExperimentLogs holds every log that waits for it; BonsaiData_Async takes the controller's events and each reward from Start; RecordHarpDevices, ExperimentManifest and the Recording phase follow PathPrefix.
  Workflow
    GroupWorkflow LogControllerLogic
      Description: Waits for Go (RunSettings: the controller's SubjectId and SessionId), then LogController creates the experiment folder RootPath\sub-<SubjectId>\ses-<SessionId>_<DateTime> and publishes it as PathPrefix, which every log waits for. RootPath is rig.yml's, the rig's acquisition folder itself (C:\Coen-Lab-Local\Acquired-Data): experiments have no project folder.
      Workflow
        SubscribeSubject RunSettings
        -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #1
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=RootPath)
        -> PropertyMapping(Path) => #4
        #1, #4 -> IncludeWorkflow(Path=OpenRigs.Logging:LogController.bonsai, SubjectId=UNMAPPED, SessionId=UNMAPPED, Path=C:\Coen-Lab-Local\Acquired-Data)
        -> DelaySubscription(DueTime=PT1S) => #6
        SubscribeSubject RunSettings => #7
        #6, #7 -> SubscribeWhen
        -> WorkflowOutput

    IncludeWorkflow(Path=OpenRigs.Logging:LogAsync.bonsai)

    SubscribeSubject PathPrefix
    -> SelectMany ExperimentLogs
      Description: Starts every experiment log once LogControllerLogic publishes PathPrefix. TrialParameters writes BonsaiData_Trial (LogTrial): one row per trial, built in ExecuteTrial when the choice is made (TrialRow, a BehaviorSubject, so the row made before the folder exists is written too; a ReplaySubject here is completed when trial 1's branch ends, and every later row is lost): what was drawn for it, the choice, its outcome, the speaker that played, and two Harp times, stimulusOnsetTime and choiceTime, with Seconds the time the outcome was known. Its columns are named and typed as the lab's list allows (K:\config\data-dictionary.json; rig-control checks before launch), and what each means (codes, units, former names) is schemas\trial-columns.yml, which ExperimentManifest copies into each experiment's manifest; settings that are the same throughout the experiment are not columns, being in the experiment's settings files (Settings\Settings_Rig_, Settings_Task_ and Settings_Experiment_<DateTime>.json: rig.yml as read, the task as read at Go, and from ExperimentSettings the subject, session, workflow, commit, who launched and sent Go and every ExperimentControl parameter at Go), and the RNG seed is logged once, as the RngSeed event in BonsaiData_Async. Subjects that already hold a value (BehaviorSubject, AsyncSubject) hand it to the late subscriber. Values set at startup, such as the Zapit startup replies and the first trial draw, are therefore logged when the experiment logs start, about a second after Go, with that time. Add new loggers inside this group.
      Workflow
        GroupWorkflow TrialParameters(Description="Writes each trial's row (TrialRow, built in ExecuteTrial when the choice is made, stamped then) into BonsaiData_Trial.")
            SubscribeSubject TrialRow
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogTrial.bonsai)
            -> WorkflowOutput

        GroupWorkflow BehaviorBoard
            SubscribeSubject BehaviorBoard-Main.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> GroupWorkflow ExcludeAnalogDataMaybe
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
                -> BooleanProperty(Value=false) => #2
                #0, #2 -> WithLatestFrom => #3
                -> Condition Flagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
                #3 -> Condition NotFlagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #8
                #6, #8 -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=BehaviorBoard-Main)

        GroupWorkflow Cameras
            SubscribeSubject PathPrefix
            -> SelectMany
                SubscribeSubject Camera-Face.Data
                -> Skip(Count=1) => #1
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #10
                #1, #10 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Face, FrameRate=50)

                SubscribeSubject Camera-Pupil.Data
                -> Skip(Count=1) => #4
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #12
                #4, #12 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Pupil, FrameRate=50)

                SubscribeSubject Camera-Body.Data
                -> Skip(Count=1) => #7
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #14
                #7, #14 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Body, FrameRate=50)

        GroupWorkflow LicketySplit
            SubscribeSubject LicketySplit-Left.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Left)

            SubscribeSubject LicketySplit-Right.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Right)

        SubscribeSubject TimestampGeneratorGen3-Main.Data
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=TimestampGeneratorGen3-Main)

        SubscribeSubject RigConfigs
        -> UclOpenAvDome.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Rig(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskConfig
        -> UclOpenAvDomeTask.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Task(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        GroupWorkflow ZapitReplies
          Description: Harp-timestamped log of every Zapit reply: the presented condition and laser state per StartStimulus, plus the last startup query reply (GetNumConditions), handed over by the ZapitReplies BehaviorSubject when ExperimentLogs starts.
          Workflow
            SubscribeSubject ZapitReplies
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                                CommandCode as command,
                                Value as value,
                                LaserOn as laserOn,
                                IsError as isError,
                                ServerDatenum as serverDatenum)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=BonsaiData_ZapitReplies, Selector="", Extension=csv)
            -> WorkflowOutput

        SubscribeSubject StepperDriver1Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=StepperDriver-A)

        SubscribeSubject StepperDriver2Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=StepperDriver-B)

        SubscribeSubject thisTrialData
        -> MemberSelector RngSeed
          Description: The RNG seed the experiment's trials are drawn with (the task file's rngSeed, or a random one when rngSeed is null). One InitialiseTrial draws every trial, so the seed is logged once, from the first trial, as a BonsaiData_Async event (RngSeed, its value in Value) rather than on every trial row. With the task file and the settings at Go they reproduce the experiment's draws.
          Selector=rngSeedUsed
        -> OpenRigs.Logging.CreateAsyncEvent(Event=RngSeed)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> MulticastSubject AsyncEvents
        -> Take(Count=1)

        SubscribeSubject ExperimentGo
        -> OpenRigs.Control.ExperimentSettings
        -> IncludeWorkflow Settings_Experiment(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

    SubscribeSubject RewardLineLeft => #4
    SubscribeSubject RewardLineRight => #5
    #4, #5 -> Merge => #6
    -> Condition DO1?(Description="Passes the reward line on DO1 when it is calibrated, whichever side rewardValves gives it.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Calibrated && Line == 1
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO1(Path=OpenRigs.Logging:LogDataSchema.bonsai)
    #6 -> Condition DO2?(Description="Passes the reward line on DO2 when it is calibrated, whichever side rewardValves gives it.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Calibrated && Line == 2
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO2(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardDelivered
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new("RewardDelivered" as Event, it.Side.ToString() + " DO" + it.Line.ToString() + " requested=" + it.RequestedUl.ToString() + " pulses=" + it.Count.ToString() + " calibrated=" + it.Calibrated.ToString() + " clamped=" + it.Clamped.ToString() as Detail, it.DeliveredUl as Value)
    -> OpenRigs.Logging.CreateAsyncEvent(Event=RewardDelivered)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MulticastSubject AsyncEvents

    SubscribeSubject PathPrefix
    -> OpenRigs.Control.ReportMetric(Name=path)
    -> OpenRigs.Control.ReportPhase(Phase=Recording)

    OpenRigs.HarpDevices.RecordHarpDevices RecordHarpDevices
      Description: Checks every Harp device in rig.yml at Start and records it into each experiment (OpenRigs.HarpDevices): the Behavior board, the timestamp generator, both stepper drivers and both Lickety Splits (each a rig.yml entry with a portName whose data the workflow publishes as <Name>.Data) must be on their portName with their usbSerial, or the workflow stops saying which board is where; 0.5 s after the experiment folder appears it asks each for a register dump on <Name>.Commands, which its log records; and it writes <Name>\<Name>_device.json and the register map <Name>\<Name>.yml, which ExperimentManifest expects (harp).
      ConfigRoot=C:\Coen-Lab-Local\RigConfigs

    OpenRigs.Manifest.ExperimentManifest ExperimentManifest
      Description: Writes manifest.json into the experiment folder (OpenRigs.Manifest), finding PathPrefix itself: once when the folder appears and again when the workflow stops. No run is connected: an experiment ends with the controller's Stop, recorded as stopped with its reason. It records the machine, this repo's commit, Bonsai's command line, who launched it and sent Go (every parameter at Go is in Settings_Experiment), rig.yml's path and hash and, each by its hash, the calibration files it and the workflow read by path (MeshMap.csv, gammalut.bmp, every file in AuditoryStimuli, the speakers' filters) and this mouse's spout positions (LickSpoutPositions\{SubjectId}.csv), what each BonsaiData_Trial column means (schemas\trial-columns.yml, copied in at Start), and what the experiment must leave: a folder for each device in rig.yml (BehaviorBoard-Main, TimestampGeneratorGen3-Main, StepperDriver-A/B, LicketySplit-Left/Right, Camera-Face/Pupil/Body), the record and register map RecordHarpDevices writes for each Harp device (harp), each of the three settings files in Settings (Settings/Settings_Rig_, Settings/Settings_Task_, Settings/Settings_Experiment_, each expected on its own) and BonsaiData (BonsaiData_Trial and BonsaiData_Async), which the overnight copy (rig-sync) alarms on if missing.
      IngestScript=av-dome
      ConfigFiles: C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\rig.yml;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\MeshMap.csv;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\gammalut.bmp;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\AuditoryStimuli;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\speaker-left.json;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\speaker-right.json;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\LickSpoutPositions\{SubjectId}.csv
      ExpectedFiles=auto;harp;Settings/Settings_Rig_;Settings/Settings_Task_;Settings/Settings_Experiment_;BonsaiData/
      TrialColumns=schemas\trial-columns.yml

    SubscribeSubject ControlEvents
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new((it.Kind.ToString() == "Command" ? it.Name : it.Kind.ToString()) as Event, it.ToString() as Detail)
    -> OpenRigs.Logging.CreateAsyncEvent(Event=Control)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MulticastSubject AsyncEvents

GroupWorkflow TrialLoop
  Description: The trial loop. DrawTrial, one InitialiseTrial for the whole experiment, draws trial 1 into thisTrialData when TaskConfig is read at Go and each later trial from the last one's outcome when its ResponseData arrives; SetTrialVars resets the per-trial state; ArmZapit and StartLaser prepare and pulse Zapit, and ExecuteTrial runs the trial, publishes its row to TrialRow when the choice is made and its ResponseData after the ITI. Runs only after Go (SubscribeWhen on StartExperiment).
  Workflow
    SubscribeSubject TaskConfig
    -> StringProperty(Value="") => #1
    SubscribeSubject ResponseData
    -> MemberSelector(Selector=CorrectResponse) => #3
    #1, #3 -> Merge => #4
    SubscribeSubject TaskConfig => #5
    #4, #5 -> CombineLatest => #6
    SubscribeSubject TrainingStage
    -> PropertyMapping(trainingStageId) => #8
    #6, #8 -> InitialiseTrial DrawTrial
      Description: Draws every trial of the experiment: the first when TaskConfig is read at Go (previous outcome empty), each later one when the last trial's ResponseData arrives, after its ITI, from that outcome (repeat rules), the task configuration and the controller's TrainingStage.
      trainingStageId=0
      TrialType=-1
    -> MulticastSubject thisTrialData

    SubscribeSubject thisTrialData
    -> SelectMany SetTrialVars(Description="Resets the per-trial state for the new trial: the visual azimuth (start and current) and the decision variable.")
        WorkflowInput Source1
        -> MemberSelector(Selector=visualAzimuth) => #1
        -> MulticastSubject visualAzimuthStart
        #1 -> MulticastSubject visualAzimuth

        IntProperty(Value=0)
        -> MulticastSubject DecisionVariable

    SubscribeSubject thisTrialData
    -> SelectMany ArmZapit
      Description: Sends Zapit the stimulus command for a laser-on trial (condition, duration, power, hardware-triggered or not) and passes only once Zapit has answered that it armed that condition with the laser on (CheckZapitArmed stops the experiment otherwise; ZapitClient fails after 5 s without an answer), as the corridor's ArmZapit does (Pip, 10 Nov 2026). Laser-off trials send nothing and pass straight through. Without hardware triggering Zapit starts the laser on receipt, before its answer and StartLaser's trigger.
      Workflow
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings => #2
        SubscribeSubject settings => #3
        -> Condition OptoTrial? => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=OptogeneticEnabled)
            -> WorkflowOutput
        #3 -> Condition NotOptoTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=OptogeneticEnabled)
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #13
        SubscribeSubject settings
        -> PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), LaserPower(Selector=OptogeneticPower)) => #6
        SubscribeSubject RigConfigs
        -> PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #8
        #4, #6, #8 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
        -> MulticastSubject ZapitCommands => #10
        SubscribeSubject ZapitReplies
        -> Skip(Count=1)
        -> Condition StartStimulusReply?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: CommandCode == 1
            -> WorkflowOutput
        -> Take(Count=1) => #20
        #20, #10 -> Zip
        -> MemberSelector(Selector=Item1) => #22
        SubscribeSubject settings => #23
        #22, #23 -> WithLatestFrom
        -> CheckZapitArmed
        -> BooleanProperty(Value=false) => #11
        #11, #13 -> Merge => #14
        Source1=#2, Source3=#14 -> Sample
        -> Take(Count=1)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.1)
    -> SelectMany StartLaser => #16
      Description: Pulses the Zapit TTL line (zapit.triggerLine) 0.1 s after ArmZapit passes (on a laser-on trial, once Zapit has confirmed it is armed). The condition that limits this to hardware-triggered opto trials is disabled, so every trial pulses the line.
      Workflow
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings => #2
        SubscribeSubject settings => #3
        SubscribeSubject RigConfigs => #4
        #3, #4 -> Zip
        -> Disable Condition HardwareTriggeredOptoTrial?
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=OptogeneticEnabled) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
            #2, #4 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Zapit.TriggerLine)
        -> MulticastSubject TriggerPulse => #8
        Disable PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration)) => #9
        Disable PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #10
        #8, #9, #10 -> Disable CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
        -> Disable MulticastSubject ZapitCommands => #12
        #2, #12 -> Sample
        -> WorkflowOutput
    SubscribeSubject StartExperiment
    -> Skip(Count=1)
    -> Condition => #22
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject TaskConfig
    -> PropertyMapping(DueSeconds(Selector=TaskParameters.Optogenetics.LaserToStimulusSeconds)) => #25
    #16, #25 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.5)
    -> SelectMany ExecuteTrial
      Description: One trial: the stimulus (visual, auditory or both) at once, with no quiescent wait, the response window on the lick detectors, the consequences (reward, error sound, timeout) and the inter-trial interval; ends with the trial's response data. Each trial's stimulusOnsetTime (stamped as StartAuditoryStimulus fires) and speakerIndex (the wired speaker SpatialLookup chose) are its own subjects; BuildTrialRow makes the trial's row when Response decides the choice and publishes it to TrialRow.
      Workflow
        WorkflowInput Source1
        -> AsyncSubject trial

        PublishSubject<System.String> StopStimuli
        BehaviorSubject<System.Double> stimulusOnsetTime
        BehaviorSubject<System.Int32> speakerIndex

        SubscribeSubject trial
        -> SelectMany StimuliPresentation
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            Annotation "Auditory Stimulus"(Text="Auditory Stimulus")
            -> SubscribeSubject settings
            -> SelectMany "Define Speaker location" => #5
                WorkflowInput Source1
                -> Take(Count=1)
                -> MemberSelector(Selector=audioAzimuth)
                -> PropertyMapping(X) => #3
                Source2=#3 -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0) => #4
                SubscribeSubject SpeakerLocations
                -> PropertyMapping(Locations) => #6
                #4, #6 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
                -> MulticastSubject speakerIndex
                -> MulticastSubject ActiveSoundChannels
                -> WorkflowOutput
            SubscribeSubject settings
            -> MemberSelector(Selector=audioEnabled)
            -> PropertyMapping(Value) => #16
            #5, #16 -> BooleanProperty(Value=true)
            -> MulticastSubject StartAuditoryStimulus
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds)
            -> MulticastSubject stimulusOnsetTime

            Annotation "Visual Stimulus"(Text="Visual Stimulus")
            -> SubscribeSubject settings
            -> SelectMany FlashingVisualStimulus
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject trialSettings

                SubscribeSubject DrawStimuli => #3
                Annotation 16Hz(Text=16Hz) => #4
                SubscribeSubject trialSettings
                -> MemberSelector(Selector=visualFlickerFrequency) => #6
                Annotation "Double freq for On/Off"(Text="Double freq for On/Off") => #7
                #6, #7 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(1 / (2 * it))
                -> PropertyMapping(Period) => #9
                #4, #9 -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.063S)
                -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #11
                #3, #11 -> WithLatestFrom => #12
                -> MemberSelector(Selector=Item1) => #13
                #12 -> MemberSelector(Selector=Item2) => #14
                Annotation "Makes it 8Hz"(Text="Makes it 8Hz") => #15
                #14, #15 -> Condition => #16
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                    -> WorkflowOutput
                #13, #16 -> Sample => #17
                Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #18
                #17, #18 -> IncludeWorkflow => #19
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=30
                  ExtentY=30
                  LocationX=130
                  LocationY=-22.5
                  Layer=0
                  Angle=0
                  ColorR=0
                  ColorG=0
                  ColorB=0
                  ColorA=1
                Annotation "Either Response or Timeout"(Text="Either Response or Timeout")
                -> SubscribeSubject StopStimuli => #21
                #19, #21 -> TakeUntil => #22
                Annotation "GratingSettings from Schema"(Text="GratingSettings from Schema")
                -> SubscribeSubject trialSettings
                -> PropertyMapping => #25
                  Contrast(Selector=visualContrast)
                  LocationY(Selector=visualElevation)
                  TemporalFrequency(Selector=visualTemporalFrequency)
                  SpatialFrequency(Selector=visualSpatialFrequency)
                  Angle(Selector=visualOrientation)
                  Phase(Selector=visualPhase)
                Annotation "Extend in deg"(Text="Extend in deg")
                -> Annotation "Large enough so you dont see any edges"(Text="Large enough so you dont see any edges")
                -> Annotation "100 makes rel. numbers below easier!"(Text="100 makes rel. numbers below easier!")
                -> FloatProperty(Value=100) => #29
                -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #30
                SubscribeSubject trialSettings => #31
                Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg") => #32
                #31, #32 -> MemberSelector(Selector=visualGaussianWindowSigma) => #33
                Source2=#33 -> Multiply(Operand=FloatProperty(Value=2)) => #34
                #34, #29 -> Zip => #35
                Annotation RelativeSigma(Text=RelativeSigma) => #36
                #35, #36 -> Divide
                -> PropertyMapping(Aperture(Selector=it)) => #38
                Annotation "Norm. 1: full size of ExtentX/Y"(Text="Norm. 1: full size of ExtentX/Y")
                -> FloatProperty(Value=1)
                -> PropertyMapping(Radius) => #41
                SubscribeSubject visualAzimuth
                -> PropertyMapping(LocationX) => #43
                #17, #25, #30, #38, #41, #43 -> IncludeWorkflow => #44
                  Path=BonVision:Primitives.DrawGratings.bonsai
                  LocationX=0
                  LocationY=0
                  Layer=0
                  ExtentX=100
                  ExtentY=100
                  SpatialFrequency=0.06666667
                  TemporalFrequency=0
                  Phase=298.032227
                  Angle=0
                  SquareWave=false
                  Contrast=0
                  DutyCycle=nil
                  Radius=1
                  Aperture=0.4
                  Opacity=1
                #44, #21 -> TakeUntil => #45
                #14 -> Condition Not => #46
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                    -> BitwiseNot
                    -> WorkflowOutput
                #3, #46 -> Sample => #47
                Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #48
                #47, #48 -> IncludeWorkflow => #49
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=30
                  ExtentY=30
                  LocationX=130
                  LocationY=-22.5
                  Layer=0
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #49, #21 -> TakeUntil => #50
                #22, #45, #50 -> Zip
                -> WorkflowOutput

                StringProperty(Value=Done)
                -> MulticastSubject StopStimuli => #54
                Bonsai.Shaders.Timer(DueTime=PT1.5S) => #55
                #54, #55 -> SubscribeWhen

        SubscribeSubject trial => #7
        SubscribeSubject trial
        -> MemberSelector(Selector=openLoopDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it
        -> PropertyMapping(DueSeconds) => #11
        #7, #11 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0) => #12
        SubscribeSubject trial => #13
        Annotation ResponseWindowInSec(Text=ResponseWindowInSec) => #14
        #13, #14 -> MemberSelector(Selector=closedLoopDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it
        -> PropertyMapping(DueSeconds) => #17
        #12, #17 -> SelectMany Response => #18
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #2
            SubscribeSubject LickStateRight
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=-1) => #5
            #2, #5 -> Merge => #6
            SubscribeSubject DecisionVariable => #7
            #6, #7 -> WithLatestFrom
            -> Add
            -> MulticastSubject DecisionVariable => #10
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Response.DegreesPerLick) => #12
            #10, #12 -> WithLatestFrom
            -> Multiply => #14
            SubscribeSubject visualAzimuthStart => #15
            #14, #15 -> WithLatestFrom
            -> Add
            -> MulticastSubject visualAzimuth
            SubscribeSubject trial => #19
            ExternalizedMapping(DueSeconds) => #20
            #19, #20 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=1.5)
            -> Take(Count=1)
            -> StringProperty(Value=NoResponse) => #23
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Response.ThresholdLicks) => #25
            #10, #25 -> WithLatestFrom => #26
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: Item1 >= Item2
            -> Take(Count=1)
            -> StringProperty(Value=Left) => #29
            #26 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: Item1 <= -Item2
            -> Take(Count=1)
            -> StringProperty(Value=Right) => #32
            #29, #32 -> Merge => #33
            #23, #33 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable MulticastSubject StopStimuli
        -> SelectMany ApplyConsequences => #20
            WorkflowInput Source1 => #0
            SubscribeSubject trial
            -> MemberSelector(Selector="targetSide,autoReward") => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression:
                new (Item1 as Response,
                Item2.Item1 as targetSide,
                Item2.Item2 as autoReward)
            -> Condition Miss? => #18
                WorkflowInput Source1
                -> MemberSelector(Selector=Response)
                -> Equal(Operand=StringProperty(Value=NoResponse))
                -> WorkflowOutput
            -> Condition AutoReward?(Description="A miss on an auto-reward trial is rewarded at the target spout, then goes on as a correct trial; the outcome stays NoResponse.")
                WorkflowInput Source1
                -> MemberSelector(Selector=autoReward)
                -> WorkflowOutput
            -> Sink RewardTargetSide
                WorkflowInput Source1
                -> MemberSelector(Selector=targetSide)
                -> MulticastSubject RewardSide
                -> WorkflowOutput
            -> StringProperty(Value=NoResponse) => #36
            #18 -> Condition NotAutoReward?
                WorkflowInput Source1
                -> MemberSelector(Selector=autoReward)
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai) => #19
            Annotation "Auto-reward: a miss on an auto-reward trial is rewarded at the target spout" => #5
              Text: Auto-reward: a miss on an auto-reward trial is rewarded at the target spout (AutoReward? under Miss?). Wrong choices are never rewarded; before #35 main rewarded the side licked on an incorrect auto-reward trial.
            #4, #5 -> Condition NotMiss? => #6
                WorkflowInput Source1
                -> MemberSelector(Selector=Response)
                -> Equal(Operand=StringProperty(Value=NoResponse))
                -> BitwiseNot
                -> WorkflowOutput
            -> Condition Correct?
                WorkflowInput Source1
                -> MemberSelector(Selector="Response,targetSide")
                -> Equal
                -> WorkflowOutput
            -> Sink RewardResponseSide
                WorkflowInput Source1
                -> MemberSelector(Selector=Response)
                -> MulticastSubject RewardSide
                -> WorkflowOutput
            -> StringProperty(Value=Correct) => #9
            #6 -> Condition Incorrect?
                WorkflowInput Source1
                -> MemberSelector(Selector="Response,targetSide")
                -> NotEqual
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai)
            -> SelectMany PlayErrorSound => #12
                SubscribeSubject TaskConfig
                -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Enabled)
                -> Take(Count=1)
                -> MulticastSubject StartAuditoryErrorSound
                -> WorkflowOutput
            SubscribeSubject trial
            -> MemberSelector(Selector=IncorrectTimeoutDuration)
            -> PropertyMapping(DueSeconds) => #15
            #12, #15 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
            -> StringProperty(Value=Incorrect) => #17
            SubscribeSubject trial
            -> MemberSelector(Selector=IncorrectTimeoutDuration)
            -> PropertyMapping(DueSeconds) => #22
            #19, #22 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
            -> StringProperty(Value=NoResponse) => #24
            #9, #17, #24, #36 -> Merge => #25
            Annotation "Give animal time to drink"(Text="Give animal time to drink") => #26
            #25, #26 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
            -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai) => #28
            SubscribeSubject trial => #29
            #28, #29 -> WithLatestFrom
            -> SelectMany ITI
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject source

                SubscribeSubject source
                -> MemberSelector(Selector=Item1) => #4
                SubscribeSubject source
                -> MemberSelector(Selector=Item2.ITI) => #6
                Annotation "All part of ITI but need to be applied elsewhere"(Text="All part of ITI but need to be applied elsewhere")
                -> Annotation "0.1 and laserToStimulusSeconds for zapit and 2 for time to drink" => #8
                  Text: 0.1 s after arming Zapit, the task's optogenetics.laserToStimulusSeconds before ExecuteTrial (0.5 in both task files) and 2 s to drink come out of the drawn ITI
                SubscribeSubject TaskConfig
                -> MemberSelector(Selector=TaskParameters.Optogenetics.LaserToStimulusSeconds) => #14
                #6, #14 -> Zip => #15
                #15, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 > 2.1 + it.Item2 ? it.Item1 - 0.1 - it.Item2 - 2.0 : 0.0
                -> PropertyMapping(DueSeconds) => #10
                #4, #10 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=4.3385810976096346)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject TrialCount
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialCount => #24
        #20, #18, #24 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(it.Item1 as CorrectResponse,
                it.Item2 as Response,
                it.Item3 as TrialCnt)
        -> WorkflowOutput
        #18 -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #35
        SubscribeSubject trial => #36
        DoubleProperty(Value=NaN) => #37
        SubscribeSubject stimulusOnsetTime => #38
        #37, #38 -> Merge => #39
        IntProperty(Value=-1) => #40
        SubscribeSubject speakerIndex => #41
        #40, #41 -> Merge => #42
        SubscribeSubject SpeakerLocations => #43
        #36, #39, #42, #43 -> CombineLatest => #44
        #35, #44 -> WithLatestFrom
        -> CreateTrialRow BuildTrialRow
          Description: The trial's BonsaiData_Trial row, built when the choice is made (stamped then, as Seconds and, unless NoResponse, choiceTime), before the drink time, error timeout and ITI, so Stop during them loses no answered trial.
        -> MulticastSubject TrialRow

        GroupWorkflow DeliverReward(Description="Rewards the response side: moves that spout in and sends DeliverRewardCommand with the trial's RewardSizeInUl.")
            BehaviorSubject<System.String> RewardSide => #0
            -> Condition Left
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Left))
                -> WorkflowOutput
            -> SelectMany SendSpoutLeftINCommand
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_LeftIN
                -> MulticastSubject StepperPositionCommand => #3
                SubscribeSubject trial
                -> MemberSelector(Selector=spoutMovements) => #7
                -> Condition Move? => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #3, #8 -> SubscribeWhen
                -> BooleanProperty(Value=true) => #10
                #7 -> Condition Stay?(Description="The stage's spoutMovements is false: the spouts stay in.") => #11
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #10, #11 -> Merge => #12
                #0, #12 -> Sample
                -> WorkflowOutput
            -> IntProperty(Value=1) => #3
            #0 -> Condition Right
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Right))
                -> WorkflowOutput
            -> SelectMany SendSpoutRightINCommand
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_RightIN
                -> MulticastSubject StepperPositionCommand => #3
                SubscribeSubject trial
                -> MemberSelector(Selector=spoutMovements) => #7
                -> Condition Move? => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #3, #8 -> SubscribeWhen
                -> BooleanProperty(Value=true) => #10
                #7 -> Condition Stay?(Description="The stage's spoutMovements is false: the spouts stay in.") => #11
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #10, #11 -> Merge => #12
                #0, #12 -> Sample
                -> WorkflowOutput
            -> IntProperty(Value=2) => #6
            #3, #6 -> Merge => #7
            SubscribeSubject trial
            -> MemberSelector(Selector=RewardSizeInUl)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
              Expression: Convert.ToDouble(it)
            #7, #10 -> WithLatestFrom
            -> MulticastSubject DeliverRewardCommand

        SubscribeSubject trial
        -> MemberSelector(Selector=SpoutINDelay)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT0.5S)
        -> SelectMany "Present Spouts"
            WorkflowInput Source1 => #0
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=BothSpouts) => #2
            -> Condition True?
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany SendSpoutINCommand => #4
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_BothIn
                -> MulticastSubject StepperPositionCommand => #3
                #0, #3 -> Sample
                -> WorkflowOutput
            #2 -> Condition False?
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany PresentTargetSpoutOnly => #6
                WorkflowInput Source1 => #0
                SubscribeSubject thisTrialData
                -> MemberSelector(Selector=targetSide) => #2
                -> Condition Left
                    WorkflowInput Source1
                    -> Equal(Operand=StringProperty(Value=Left))
                    -> WorkflowOutput
                -> SelectMany SendSpoutLeftINCommand => #4
                    WorkflowInput Source1 => #0
                    Annotation MoveToOutPosition(Text=MoveToOutPosition)
                    -> SubscribeSubject StepperPosition_LeftIN
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                #2 -> Condition Right
                    WorkflowInput Source1
                    -> Equal(Operand=StringProperty(Value=Right))
                    -> WorkflowOutput
                -> SelectMany SendSpoutRightINCommand => #6
                    WorkflowInput Source1 => #0
                    Annotation MoveToOutPosition(Text=MoveToOutPosition)
                    -> SubscribeSubject StepperPosition_RightIN
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                #4, #6 -> Merge => #7
                #0, #7 -> Sample
                -> WorkflowOutput
            #4, #6 -> Merge => #7
            #0, #7 -> Sample
            -> WorkflowOutput
    -> BehaviorSubject ResponseData => #19
    #19, #22 -> SubscribeWhen

OpenRigs.LiveView.StreamDevices LiveView
  Description: Streams every device in this machine's rig.yml that the workflow publishes, over ZeroMQ, for the live view (OpenRigs.LiveView): data on TCP 5556, video on 5558, from Start, in ready mode too. The three cameras as Camera-Face/Pupil/Body.video, 5 JPEG frames a second at 320 x 240, and the Behavior board's encoder from BehaviorBoard-Main.Data, 10 a second; each rate and size can be changed in rig.yml under the device's liveView:. Also elapsed, seconds since the experiment folder appeared, and liveview, this workflow and its commit. Every message carries the rig and the session key, ready until the experiment folder exists. Last in the workflow, because it streams only subjects built before it. A port already in use stops the workflow at Start.
  ConfigRoot=C:\Coen-Lab-Local\RigConfigs
  DataPort=5556
  VideoPort=5558
